<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p1="clr-namespace:Harp.SoundCard;assembly=Harp.SoundCard"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p2="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>DarkGray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>RNG</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" DisplayName="BehaviorPort" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>HarpBehavior</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>BehaviorCommands</rx:Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="beh:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM4</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:TimestampedDigitalInputState" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
                <Value>DIPort0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PokeLeft</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:TimestampedDigitalInputState" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
                <Value>DIPort1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>PokeRight</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:TimestampedDigitalInputState" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
                <Value>DI3</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Lever</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="10" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="15" To="20" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="21" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="25" To="30" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="31" Label="Source1" />
            <Edge From="30" To="31" Label="Source2" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>1</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" DisplayName="SoundCardPort" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SoundCard</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>SoundCommands</rx:Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM8</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>SoundEvents</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
              <rx:Name>TrialOutcome</rx:Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it ? 3000 : 1000</scr:Expression>
            </Expression>
            <Expression xsi:type="p1:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="p1:PlaySoundOrFrequency" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SoundCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Delay">
                <gl:DueTime>PT0.3S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateStopPayload">
                <p1:Stop>1</p1:Stop>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SoundCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SoundEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateAttenuationRightPayload">
                <p1:AttenuationRight>150</p1:AttenuationRight>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SoundCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT1S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>LeverToStart</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Lever</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawText.bonsai">
              <ExtentX>2</ExtentX>
              <ExtentY>2</ExtentY>
              <Text>Press the lever -&gt;&gt;</Text>
              <Font>Arial, 200pt</Font>
              <Alignment>Center</Alignment>
              <LineAlignment>Center</LineAlignment>
              <TextRenderingHint>AntiAliasGridFit</TextRenderingHint>
              <Color>
                <Val0>0</Val0>
                <Val1>0</Val1>
                <Val2>0</Val2>
                <Val3>255</Val3>
              </Color>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Stim1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RNG</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateContinuousUniform">
                <p2:Lower>-1.57079632679</p2:Lower>
                <p2:Upper>1.57079632679</p2:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ThisAngle</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Angle" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <ExtentX>1.5</ExtentX>
              <ExtentY>1.5</ExtentY>
              <SpatialFrequency>10</SpatialFrequency>
              <TemporalFrequency>1</TemporalFrequency>
              <Phase>0</Phase>
              <Angle>-30.6009617</Angle>
              <SquareWave>false</SquareWave>
              <Contrast>1</Contrast>
              <DutyCycle xsi:nil="true" />
              <Radius>1</Radius>
              <Aperture>0</Aperture>
              <Opacity>1</Opacity>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT0.5S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ThisAngle</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Delay">
          <gl:DueTime>PT0.5S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Stim2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>PreviousAngle</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RNG</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateContinuousUniform">
                <p2:Lower>-1.57079632679</p2:Lower>
                <p2:Upper>1.57079632679</p2:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ThisAngle</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Angle" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <ExtentX>1.5</ExtentX>
              <ExtentY>1.5</ExtentY>
              <SpatialFrequency>10</SpatialFrequency>
              <TemporalFrequency>1</TemporalFrequency>
              <Phase>0</Phase>
              <Angle>52.9949722</Angle>
              <SquareWave>false</SquareWave>
              <Contrast>1</Contrast>
              <DutyCycle xsi:nil="true" />
              <Radius>1</Radius>
              <Aperture>0</Aperture>
              <Opacity>1</Opacity>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT0.5S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ThisAngle</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PreviousAngle</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="10" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="18" Label="Source1" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Response</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PokeLeft</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PokeRight</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawText.bonsai">
              <ExtentX>2</ExtentX>
              <ExtentY>2</ExtentY>
              <Text>&lt;&lt;- Choose one port -&gt;&gt;</Text>
              <Font>Arial, 200pt</Font>
              <Alignment>Center</Alignment>
              <LineAlignment>Center</LineAlignment>
              <TextRenderingHint>AntiAliasGridFit</TextRenderingHint>
              <Color>
                <Val0>0</Val0>
                <Val1>0</Val1>
                <Val2>0</Val2>
                <Val3>255</Val3>
              </Color>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="8" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="7" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Outcome</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="GreaterThan" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Data</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Equal" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>FlashOutcome</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TrialOutcome</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(it ? 1.0 : 0.0 as G,
it ? 0.0 : 1.0 as R)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorG" Selector="G" />
                <Property Name="ColorR" Selector="R" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>1</ExtentX>
              <ExtentY>1</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>1</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT0.5S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>