WorkflowBuilder(Version=2.9.0)
GroupWorkflow VideoCapture
    Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
    -> Bonsai.Vision.Flip(Mode=Horizontal)
    -> PublishSubject Image

GroupWorkflow GestureRecognition
    ExternalizedMapping(Value(DisplayName=UseGpu))
    -> BooleanProperty(Value=false) => #1
    -> Condition Gpu?
        WorkflowInput Source1
        -> WorkflowOutput
    -> Bonsai.ML.Torch.InitializeTorchDevice(DeviceType=CUDA, DeviceIndex=-1) => #3
    #1 -> Condition Cpu?
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> Bonsai.ML.Torch.InitializeTorchDevice(DeviceType=CPU, DeviceIndex=-1) => #5
    #3, #5 -> Merge
    -> BehaviorSubject Device

    SubscribeSubject Device
    -> PropertyMapping(Device)
    -> Bonsai.ML.Torch.NeuralNets.LoadScriptModule(ModelPath=..\..\models\GestureRecognition\YOLOv10n_gestures.torchscript)
    -> BehaviorSubject Model

    SubscribeSubject Image => #12
    SubscribeSubject Device
    -> PropertyMapping(Device) => #14
    #12, #14 -> GestureRecognition.Preprocess => #15
    SubscribeSubject Model
    -> PropertyMapping(Model) => #17
    #15, #17 -> Bonsai.ML.Torch.NeuralNets.Forward
    -> GestureRecognition.DecodeGestureData(ConfidenceThreshold=0.5)
    -> PublishSubject Gestures => #20
    SubscribeSubject Model => #21
    #20, #21 -> SubscribeWhen

    Bonsai.Vision.LoadImage(FileName=ActionKey.png, Mode=Unchanged)
    -> BehaviorSubject ActionKey

GroupWorkflow Shaders
    Bonsai.Shaders.CreateWindow
      Width=640
      Height=480
      VSync=On
      SwapSync=false
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> GroupWorkflow BonVisionResources(Description="Loads mesh and shader resources for rendering primitive stimuli.")
        WorkflowInput Source1
        -> Bonsai.Shaders.UpdateRenderState
          RenderState
            StateConfiguration=Bonsai.Shaders.EnableState(Capability=Blend)
            StateConfiguration=Bonsai.Shaders.EnableState(Capability=DepthTest)
            StateConfiguration=Bonsai.Shaders.BlendFunctionState(SourceFactor=SrcAlpha, DestinationFactor=OneMinusSrcAlpha)
            StateConfiguration=Bonsai.Shaders.DepthFunctionState(Function=Lequal)
        -> Defer InternalResources
            WorkflowInput Source1
            -> Bonsai.Shaders.MeshResources
              Meshes
                MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=Quad, FileName=BonVision:Models.Quad.obj)
                MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=ViewportQuad, QuadEffects=None)
                MeshConfiguration(Name=MeshMap)
                MeshConfiguration(Name=SphereMap)
            -> WorkflowOutput
        -> Bonsai.Shaders.MeshResources(Meshes(MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=Plane, FileName=BonVision:Models.Plane.obj)))
        -> Bonsai.Shaders.ShaderResources
          Shaders
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=Checkerboard
              RenderState=""
              ShaderUniforms=""
              BufferBindings=""
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.Quad.vert
              FragmentShader=BonVision:Shaders.Checkerboard.frag
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=Image1
              RenderState=""
              ShaderUniforms=""
              BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureName=Image, TextureTarget=Texture2D))
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.Quad.vert
              FragmentShader=BonVision:Shaders.Image.frag
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=Image2
              RenderState=""
              ShaderUniforms=""
              BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture1, TextureName=Image2, TextureTarget=Texture2D))
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.Quad.vert
              FragmentShader=BonVision:Shaders.Image.frag
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=Image3
              RenderState=""
              ShaderUniforms=""
              BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureName=Image3, TextureTarget=Texture2D))
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.Quad.vert
              FragmentShader=BonVision:Shaders.Image.frag
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=Color
              RenderState=""
              ShaderUniforms=""
              BufferBindings=""
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.Quad.vert
              FragmentShader=BonVision:Shaders.Color.frag
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=Gratings
              RenderState=""
              ShaderUniforms=""
              BufferBindings=""
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.Gratings.vert
              FragmentShader=BonVision:Shaders.Gratings.frag
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=Circle
              RenderState=""
              ShaderUniforms=""
              BufferBindings=""
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.Quad.vert
              FragmentShader=BonVision:Shaders.Circle.frag
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=CircleArray
              RenderState=""
              ShaderUniforms=""
              BufferBindings=""
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.QuadArray.vert
              FragmentShader=BonVision:Shaders.Circle.frag
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=Model
              RenderState=""
              ShaderUniforms=""
              BufferBindings=""
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.Model.vert
              FragmentShader=BonVision:Shaders.Model.frag
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=ModelArray
              RenderState=""
              ShaderUniforms=""
              BufferBindings=""
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.ModelArray.vert
              FragmentShader=BonVision:Shaders.Model.frag
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=TexturedModel
              RenderState=""
              ShaderUniforms=""
              BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=textureDiffuse, TextureSlot=Texture0, TextureTarget=Texture2D))
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.TexturedModel.vert
              FragmentShader=BonVision:Shaders.TexturedModel.frag
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=TexturedModelArray
              RenderState=""
              ShaderUniforms=""
              BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=textureDiffuse, TextureSlot=Texture0, TextureTarget=Texture2D))
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.TexturedModelArray.vert
              FragmentShader=BonVision:Shaders.TexturedModel.frag
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=MeshMap
              RenderState=""
              ShaderUniforms=""
              BufferBindings=""
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.MeshMap.vert
              FragmentShader=BonVision:Shaders.MeshMap.frag
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=PerspectiveMap
              RenderState=""
              ShaderUniforms=""
              BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D))
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.PerspectiveMap.vert
              FragmentShader=BonVision:Shaders.PerspectiveMap.frag
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=SphereMap
              RenderState=""
              ShaderUniforms=""
              BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=TextureCubeMap))
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.SphereMap.vert
              FragmentShader=BonVision:Shaders.SphereMap.frag
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=ViewMap
              RenderState=""
              ShaderUniforms=""
              BufferBindings
                BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=TextureCubeMap)
                BufferBinding=Bonsai.Shaders.TextureBinding(Name=viewMap, TextureSlot=Texture1, TextureTarget=Texture2D)
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.Quad.vert
              FragmentShader=BonVision:Shaders.ViewMap.frag
            ShaderConfiguration=Bonsai.Shaders.Material
              Name=Gamma
              RenderState=""
              ShaderUniforms=""
              BufferBindings
                BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex, TextureSlot=Texture0, TextureTarget=Texture2D)
                BufferBinding=Bonsai.Shaders.TextureBinding(Name=lut, TextureSlot=Texture1, TextureTarget=Texture2D)
              FramebufferAttachments=""
              VertexShader=BonVision:Shaders.Quad.vert
              FragmentShader=BonVision:Shaders.Gamma.frag
        -> WorkflowOutput
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=Image, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=Image2, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=Image3, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
    -> Bonsai.Resources.LoadResources

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1)
    -> PublishSubject Draw

    SubscribeSubject Image
    -> Bonsai.Shaders.UpdateTexture(TextureName=Image, TextureTarget=Texture2D, InternalFormat=Rgba)

    SubscribeSubject Draw
    -> GroupWorkflow Transform
        WorkflowInput Source1 => #0
        ExternalizedMapping => #1
          X(DisplayName=ExtentX, Description="The size of the image along the x-axis.")
          Y(DisplayName=ExtentY, Description="The size of the image along the x-axis.")
        #0, #1 -> Bonsai.Shaders.Scale(Order=Prepend, X=2, Y=2, Z=1)
        -> Bonsai.Shaders.Scale(Order=Prepend, X=1, Y=-1, Z=1)
        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=Image1)
        -> WorkflowOutput
    -> Bonsai.Shaders.DrawMesh(ShaderName=Image1, MeshName=Quad)

    StringProperty(Value="")
    -> BehaviorSubject Label

    PropertySource<Bonsai.Vision.Drawing.AddTextBox,OpenCV.Net.Scalar>(MemberName=Color, Value(Val0=0, Val1=0, Val2=0, Val3=255))
    -> BehaviorSubject LabelColor
    -> BehaviorSubject ScoreColor

    SubscribeSubject Draw => #17
    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=Sender.Size)
    -> PropertyMapping(Size(Selector="Width,Height")) => #20
    #17, #20 -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=2560, Height=1600), Depth=U8, Channels=4, Color(Val0=0, Val1=0, Val2=0, Val3=0)) => #21
    SubscribeSubject Label
    -> PropertyMapping(Text) => #23
    SubscribeSubject LabelColor
    -> PropertyMapping(Color) => #25
    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=Sender.Size)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it.Width / 2 as X, it.Height / 10 as Y)
    -> PropertyMapping(Origin(Selector="X,Y")) => #29
    #21, #23, #25, #29 -> Bonsai.Vision.Drawing.AddText
      Text=""
      Alignment=Center
      LineAlignment=Center
      TextRenderingHint=SystemDefault
      Color(Val0=0, Val1=0, Val2=0, Val3=255)
      Font="Tahoma, 72pt"
      Origin(X=1280, Y=160)
    -> Bonsai.Vision.Drawing.DrawCanvas
    -> Bonsai.Shaders.UpdateTexture(TextureName=Image2, TextureTarget=Texture2D, InternalFormat=Rgba)

    SubscribeSubject Draw
    -> Condition Gesture
        WorkflowInput Source1 => #0
        SubscribeSubject MatchingGesture => #1
        SubscribeSubject IsStarted => #2
        #1, #2 -> CombineLatest => #3
        #0, #3 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item2.Item1 && it.Item2.Item2
        -> WorkflowOutput
    -> PropertySource<Bonsai.Vision.Drawing.AddTextBox,OpenCV.Net.Scalar>(MemberName=Color, Value(Val0=0, Val1=255, Val2=0, Val3=255)) => #35
    SubscribeSubject Draw
    -> Condition Gesture
        WorkflowInput Source1 => #0
        SubscribeSubject MatchingGesture => #1
        SubscribeSubject IsStarted => #2
        #1, #2 -> CombineLatest => #3
        #0, #3 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: !it.Item2.Item1 && it.Item2.Item2
        -> WorkflowOutput
    -> PropertySource<Bonsai.Vision.Drawing.AddTextBox,OpenCV.Net.Scalar>(MemberName=Color, Value(Val0=0, Val1=0, Val2=255, Val3=255)) => #38
    #35, #38 -> Merge
    -> MulticastSubject ScoreColor

    StringProperty
    -> BehaviorSubject ScoreLabel

    SubscribeSubject Score
    -> Skip(Count=1)
    -> Format(Format="Current score: {0:0.00}")
    -> MulticastSubject ScoreLabel

    SubscribeSubject Draw
    -> GroupWorkflow Transform
        WorkflowInput Source1 => #0
        ExternalizedMapping(X(DisplayName=ExtentX), Y(DisplayName=ExtentY)) => #1
        #0, #1 -> Bonsai.Shaders.Scale(Order=Prepend, X=2, Y=2, Z=1)
        -> Bonsai.Shaders.Scale(Order=Prepend, X=1, Y=-1, Z=1)
        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=Image2)
        -> WorkflowOutput
    -> Bonsai.Shaders.DrawMesh(ShaderName=Image2, MeshName=Quad)

    SubscribeSubject Draw => #50
    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=Sender.Size)
    -> PropertyMapping(Size(Selector="Width,Height")) => #53
    #50, #53 -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=2560, Height=1600), Depth=U8, Channels=4, Color(Val0=0, Val1=0, Val2=0, Val3=0)) => #54
    SubscribeSubject ScoreLabel
    -> PropertyMapping(Text) => #56
    SubscribeSubject ScoreColor
    -> PropertyMapping(Color) => #58
    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=Sender.Size)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it.Width / 100 as X, it.Height / 5 as Y)
    -> PropertyMapping(Origin(Selector="X,Y")) => #62
    #54, #56, #58, #62 -> Bonsai.Vision.Drawing.AddText
      Alignment=Near
      LineAlignment=Center
      TextRenderingHint=SystemDefault
      Color(Val0=0, Val1=0, Val2=0, Val3=255)
      Font="Tahoma, 36pt"
      Origin(X=25, Y=320)
    -> Bonsai.Vision.Drawing.DrawCanvas
    -> Bonsai.Shaders.UpdateTexture(TextureName=Image3, TextureTarget=Texture2D, InternalFormat=Rgba)

    SubscribeSubject Draw
    -> GroupWorkflow Transform
        WorkflowInput Source1 => #0
        ExternalizedMapping(X(DisplayName=ExtentX), Y(DisplayName=ExtentY)) => #1
        #0, #1 -> Bonsai.Shaders.Scale(Order=Prepend, X=2, Y=2, Z=1)
        -> Bonsai.Shaders.Scale(Order=Prepend, X=1, Y=-1, Z=1)
        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=Image3)
        -> WorkflowOutput
    -> Bonsai.Shaders.DrawMesh(ShaderName=Image3, MeshName=Quad)

GroupWorkflow TaskResources
    BooleanProperty(Value=false)
    -> BehaviorSubject MatchingGesture
    -> BehaviorSubject IsStarted

    Bonsai.Shaders.UpdateFrame
    -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
    -> PublishSubject ElapsedTime

    Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=33)
    -> BehaviorSubject CategoryDistribution

    Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=256)
    -> BehaviorSubject ColorDistribution

    GroupWorkflow Colours
        PropertySource<Bonsai.Vision.Drawing.AddTextBox,OpenCV.Net.Scalar>(MemberName=Color, Value(Val0=255, Val1=155, Val2=200, Val3=255))
        -> Take(Count=1) => #1
        PropertySource<Bonsai.Vision.Drawing.AddTextBox,OpenCV.Net.Scalar>(MemberName=Color, Value(Val0=0, Val1=255, Val2=0, Val3=255))
        -> Take(Count=1) => #3
        PropertySource<Bonsai.Vision.Drawing.AddTextBox,OpenCV.Net.Scalar>(MemberName=Color, Value(Val0=39, Val1=162, Val2=105, Val3=255))
        -> Take(Count=1) => #5
        PropertySource<Bonsai.Vision.Drawing.AddTextBox,OpenCV.Net.Scalar>(MemberName=Color, Value(Val0=226, Val1=0, Val2=29, Val3=255))
        -> Take(Count=1) => #7
        PropertySource<Bonsai.Vision.Drawing.AddTextBox,OpenCV.Net.Scalar>(MemberName=Color, Value(Val0=0, Val1=20, Val2=222, Val3=255))
        -> Take(Count=1) => #9
        PropertySource<Bonsai.Vision.Drawing.AddTextBox,OpenCV.Net.Scalar>(MemberName=Color, Value(Val0=68, Val1=12, Val2=255, Val3=255))
        -> Take(Count=1) => #11
        PropertySource<Bonsai.Vision.Drawing.AddTextBox,OpenCV.Net.Scalar>(MemberName=Color, Value(Val0=173, Val1=183, Val2=116, Val3=255))
        -> Take(Count=1) => #13
        PropertySource<Bonsai.Vision.Drawing.AddTextBox,OpenCV.Net.Scalar>(MemberName=Color, Value(Val0=0, Val1=125, Val2=255, Val3=255))
        -> Take(Count=1) => #15
        #1, #3, #5, #7, #9, #11, #13, #15 -> Merge
        -> ToList
        -> WorkflowOutput
    -> BehaviorSubject Colors

    DoubleProperty(Value=0)
    -> BehaviorSubject Score

    BehaviorSubject<System.Double> AddScore => #14
    SubscribeSubject Score => #15
    #14, #15 -> WithLatestFrom
    -> Add
    -> MulticastSubject Score

SubscribeSubject IsStarted
-> Condition Start
    WorkflowInput Source1
    -> WorkflowOutput
-> SelectMany InitializeScore
    ExternalizedMapping(DueTime)
    -> Bonsai.Shaders.Timer(DueTime=PT3S)
    -> WorkflowOutput

    WorkflowInput Source1
    -> StringProperty(Value="Get Ready...")
    -> MulticastSubject Label
    -> DoubleProperty(Value=0)
    -> MulticastSubject Score
-> SelectMany RunExperiment
    ExternalizedMapping(DueTime(DisplayName=InterTrialInterval))
    -> Bonsai.Shaders.Timer(DueTime=PT1S)
    -> SelectMany RunTrial
        SubscribeSubject CategoryDistribution
        -> Bonsai.Numerics.Distributions.Sample
        -> BehaviorSubject Category

        BooleanProperty(Value=false)
        -> MulticastSubject MatchingGesture

        SubscribeSubject Gestures
        -> Concat => #6
        SubscribeSubject Category
        -> PropertyMapping(Value) => #8
        #6, #8 -> Condition CorrectGesture
            WorkflowInput Source1
            -> MemberSelector(Selector=Gesture) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=WorkflowProperty<GestureRecognition.Gesture>(Value=Three2))
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject MatchingGesture

        SubscribeSubject Gestures
        -> Concat => #13
        SubscribeSubject Category
        -> PropertyMapping(Value) => #15
        #13, #15 -> Condition IncorrectGesture
            WorkflowInput Source1
            -> MemberSelector(Selector=Gesture) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> NotEqual(Operand=WorkflowProperty<GestureRecognition.Gesture>(Value=Three2))
            -> WorkflowOutput
        -> BooleanProperty(Value=false)
        -> MulticastSubject MatchingGesture

        SubscribeSubject Gestures
        -> Condition NoGesture
            WorkflowInput Source1
            -> MemberSelector(Selector=Count)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> BooleanProperty(Value=false)
        -> MulticastSubject MatchingGesture

        SubscribeSubject Category
        -> InputMapping(Value(Selector=it))
        -> PropertySource<WorkflowProperty(GestureRecognition.Gesture),GestureRecognition.Gesture>(MemberName=Value, Value=Three2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.ToString()
        -> MulticastSubject Label

        SubscribeSubject Colors => #28
        SubscribeSubject Category
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it % 8
        -> PropertyMapping(Value) => #31
        #28, #31 -> Index(Operand=IntProperty(Value=3))
        -> MulticastSubject LabelColor

        SubscribeSubject ElapsedTime
        -> Accumulate
        -> PublishSubject Time

        SubscribeSubject ElapsedTime
        -> Condition
            WorkflowInput Source1 => #0
            SubscribeSubject MatchingGesture => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> MulticastSubject AddScore

        SubscribeSubject Time
        -> Condition TimeUp
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> GreaterThanOrEqual(Operand=WorkflowProperty<System.Int64>(Value=2))
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany ResetCategory => #3
        WorkflowInput Source1
        -> StringProperty
        -> MulticastSubject Label
        -> WorkflowOutput
    ExternalizedMapping(Count(DisplayName=NumTrials)) => #4
    #3, #4 -> RepeatCount(Count=10)
    -> TakeLast(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1
-> SelectMany Reset
    WorkflowInput Source1 => #0
    SubscribeSubject Score => #1
    #0, #1 -> WithLatestFrom
    -> Format(Format="Final score: {0:0.00}", Selector=Item2)
    -> MulticastSubject ScoreLabel
    -> StringProperty(Value="")
    -> MulticastSubject Label
    -> BooleanProperty(Value=false)
    -> MulticastSubject MatchingGesture
    -> MulticastSubject IsStarted
    -> PropertySource<Bonsai.Vision.Drawing.AddTextBox,OpenCV.Net.Scalar>(MemberName=Color, Value(Val0=0, Val1=0, Val2=0, Val3=255))
    -> MulticastSubject ScoreColor
    -> MulticastSubject LabelColor
    -> WorkflowOutput
-> Repeat

GroupWorkflow Instructions
    SubscribeSubject Gestures
    -> VisualizerMapping(VisualizerType=TypeMapping<GestureRecognition.GestureVisualizer>)
    -> SubscribeSubject Image
    -> VisualizerMapping => #3
    SubscribeSubject ActionKey
    -> VisualizerMapping => #5
    SubscribeSubject IsStarted
    -> Equal(Operand=BooleanProperty(Value=false))
    -> PropertyMapping(Enabled)
    -> Bonsai.Gui.ButtonBuilder(Enabled=true, Visible=true, Text=Start)
    -> Sink
        WorkflowInput Source1
        -> BooleanProperty(Value=true)
        -> MulticastSubject IsStarted
        -> WorkflowOutput
    -> VisualizerMapping => #11
    #5, #11 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=2
      ColumnStyles=""
      RowStyles(RowStyle(SizeType=Percent, Height=90), RowStyle(SizeType=Percent, Height=10))
      CellSpans=""
    -> VisualizerMapping => #13
    #3, #13 -> Bonsai.Gui.TableLayoutPanelBuilder Preview(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput
-> Bonsai.Design.VisualizerWindow(Text=InstructionsPreview, Visible=true, Location=nil, Size=nil, WindowState=nil)
