<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:movenet="clr-namespace:Bonsai.TensorFlow.MoveNet;assembly=Bonsai.TensorFlow.MoveNet"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:bv="clr-namespace:BonVision;assembly=BonVision"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Camera</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="movenet:PredictSinglePoseThunder">
          <movenet:MinimumConfidence>0.375</movenet:MinimumConfidence>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Pose</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FrameSize</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Width</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Height</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Size</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TextureResources">
          <gl:Textures>
            <gl:TextureConfiguration xsi:type="gl:Texture2D">
              <gl:Name>Camera</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
            </gl:TextureConfiguration>
          </gl:Textures>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>0</Left>
        <Right>1</Right>
        <Bottom>0</Bottom>
        <Top>1</Top>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DrawCamera</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Camera</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Flip">
                <cv:Mode>Vertical</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:StoreImage">
                <gl:InternalFormat>Rgba</gl:InternalFormat>
                <gl:WrapS>Repeat</gl:WrapS>
                <gl:WrapT>Repeat</gl:WrapT>
                <gl:MinFilter>Linear</gl:MinFilter>
                <gl:MagFilter>Linear</gl:MagFilter>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:BindTexture">
                <gl:TextureSlot>Texture0</gl:TextureSlot>
                <gl:ShaderName>Image</gl:ShaderName>
                <gl:TextureName />
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ExtentX" />
              <Property Name="ExtentY" />
              <Property Name="LocationX" />
              <Property Name="LocationY" />
              <Property Name="Layer" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Angle" Description="The angle of the image." />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="bv:AngleProperty">
                <bv:Value>180</bv:Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Angle" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Transform</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="X" DisplayName="LocationX" />
                    <Property Name="Y" DisplayName="LocationY" />
                    <Property Name="Z" DisplayName="Layer" Description="The optional drawing overlay priority. Lower numbers appear below higher numbers." />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Translate">
                      <gl:Order>Prepend</gl:Order>
                      <gl:X>0.5</gl:X>
                      <gl:Y>0.5</gl:Y>
                      <gl:Z>0</gl:Z>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Angle" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RotateZ">
                      <gl:Order>Prepend</gl:Order>
                      <gl:Angle>3.14159274</gl:Angle>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="X" DisplayName="ExtentX" Description="The size of the image along the x-axis." />
                    <Property Name="Y" DisplayName="ExtentY" Description="The size of the image along the x-axis." />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Scale">
                      <gl:Order>Prepend</gl:Order>
                      <gl:X>1</gl:X>
                      <gl:Y>1</gl:Y>
                      <gl:Z>1</gl:Z>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:UpdateUniform">
                      <gl:UniformName>transform</gl:UniformName>
                      <gl:ShaderName>Image</gl:ShaderName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ScaleX" />
              <Property Name="ScaleY" />
              <Property Name="ShiftX" />
              <Property Name="ShiftY" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ScaleShift</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="X" DisplayName="ScaleX" Category="Texture Mapping" />
                    <Property Name="Y" DisplayName="ScaleY" Category="Texture Mapping" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="bv:CreateTextureScale">
                      <bv:X>1</bv:X>
                      <bv:Y>1</bv:Y>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:UpdateUniform">
                      <gl:UniformName>scale</gl:UniformName>
                      <gl:ShaderName>Image</gl:ShaderName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="X" DisplayName="ShiftX" Category="Texture Mapping" />
                    <Property Name="Y" DisplayName="ShiftY" Category="Texture Mapping" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="bv:CreateTextureShift">
                      <bv:X>0</bv:X>
                      <bv:Y>0</bv:Y>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:UpdateUniform">
                      <gl:UniformName>shift</gl:UniformName>
                      <gl:ShaderName>Image</gl:ShaderName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:DrawMesh">
                <gl:ShaderName>Image</gl:ShaderName>
                <gl:MeshName>Quad</gl:MeshName>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="4" To="7" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="14" Label="Source1" />
            <Edge From="10" To="14" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source3" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Pose</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="movenet:GetBodyPart">
          <movenet:Name>right_wrist</movenet:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Size</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item1.X / Item2.Item1 as X,
Item1.Y / Item2.Item2 as Y)</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>NormalizedPose</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>NormalizedPose</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="LocationX" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>NormalizedPose</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="LocationY" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
        <Diameter>0.1</Diameter>
        <LocationX>NaN</LocationX>
        <LocationY>NaN</LocationY>
        <Layer>0</Layer>
        <ColorR>1</ColorR>
        <ColorG>1</ColorG>
        <ColorB>1</ColorB>
        <ColorA>1</ColorA>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="18" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="28" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="28" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source3" />
    </Edges>
  </Workflow>
</WorkflowBuilder>