<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p1="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Video</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="vid:VideoCaptureDevice">
                <vid:Index>1</vid:Index>
                <vid:CaptureProperties />
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>TopCamera</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:WarpPerspective">
                <cv:Source>
                  <cv:Point2f>
                    <cv:X>262.666656</cv:X>
                    <cv:Y>162.601624</cv:Y>
                  </cv:Point2f>
                  <cv:Point2f>
                    <cv:X>113.333336</cv:X>
                    <cv:Y>360.3252</cv:Y>
                  </cv:Point2f>
                  <cv:Point2f>
                    <cv:X>418.666656</cv:X>
                    <cv:Y>426.666656</cv:Y>
                  </cv:Point2f>
                  <cv:Point2f>
                    <cv:X>529.3333</cv:X>
                    <cv:Y>180.813</cv:Y>
                  </cv:Point2f>
                </cv:Source>
                <cv:Destination>
                  <cv:Point2f>
                    <cv:X>0</cv:X>
                    <cv:Y>0</cv:Y>
                  </cv:Point2f>
                  <cv:Point2f>
                    <cv:X>0</cv:X>
                    <cv:Y>480</cv:Y>
                  </cv:Point2f>
                  <cv:Point2f>
                    <cv:X>640</cv:X>
                    <cv:Y>480</cv:Y>
                  </cv:Point2f>
                  <cv:Point2f>
                    <cv:X>640</cv:X>
                    <cv:Y>0</cv:Y>
                  </cv:Point2f>
                </cv:Destination>
                <cv:Flags>Linear</cv:Flags>
                <cv:FillValue>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>0</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:FillValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:ConvertColor">
                <cv:Conversion>Bgr2Hsv</cv:Conversion>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:HsvThreshold">
                <cv:Lower>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>144</cv:Val1>
                  <cv:Val2>100</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:Lower>
                <cv:Upper>
                  <cv:Val0>38</cv:Val0>
                  <cv:Val1>255</cv:Val1>
                  <cv:Val2>255</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>External</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea xsi:nil="true" />
                <cv:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Centroid" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Position</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ChaseCam</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:CreateArduino">
                <ard:Name>PanTilt</ard:Name>
                <ard:PortName>COM5</ard:PortName>
                <ard:BaudRate>57600</ard:BaudRate>
                <ard:SamplingInterval>10</ard:SamplingInterval>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
              <rx:Name>TiltAngle</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:ServoOutput">
                <ard:PortName>PanTilt</ard:PortName>
                <ard:Pin>3</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
              <rx:Name>PanAngle</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:ServoOutput">
                <ard:PortName>PanTilt</ard:PortName>
                <ard:Pin>5</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="vid:VideoCaptureDevice">
                <vid:Index>0</vid:Index>
                <vid:CaptureProperties />
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>ChaseCamera</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:ConvertColor">
                <cv:Conversion>Bgr2Hsv</cv:Conversion>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:HsvThreshold">
                <cv:Lower>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>130</cv:Val1>
                  <cv:Val2>89</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:Lower>
                <cv:Upper>
                  <cv:Val0>17</cv:Val0>
                  <cv:Val1>255</cv:Val1>
                  <cv:Val2>255</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>External</cv:Mode>
                <cv:Method>ChainApproxNone</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea xsi:nil="true" />
                <cv:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Centroid" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>ChasePosition</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ChasePosition</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DelaySubscription">
                <rx:DueTime>PT5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>X</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Rescale">
                <dsp:Min>0</dsp:Min>
                <dsp:Max>640</dsp:Max>
                <dsp:RangeMin>1</dsp:RangeMin>
                <dsp:RangeMax>-1</dsp:RangeMax>
                <dsp:RescaleType>Clamp</dsp:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="DoubleProperty">
                <Value>3</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Integrate</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>90</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Scan">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>new(
Accumulation + Value as NewValue,
Accumulation as OldValue)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>20 &lt; NewValue &amp;&amp; NewValue &lt; 160 ? NewValue : OldValue</scr:Expression>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>PanAngle</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Y</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Rescale">
                <dsp:Min>0</dsp:Min>
                <dsp:Max>360</dsp:Max>
                <dsp:RangeMin>1</dsp:RangeMin>
                <dsp:RangeMax>-1</dsp:RangeMax>
                <dsp:RescaleType>Clamp</dsp:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="DoubleProperty">
                <Value>1.5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Integrate</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>90</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Scan">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>new(
Accumulation + Value as NewValue,
Accumulation as OldValue)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>20 &lt; NewValue &amp;&amp; NewValue &lt; 160 ? NewValue : OldValue</scr:Expression>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TiltAngle</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>90</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TiltAngle</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>90</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>PanAngle</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="15" To="21" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Harp</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="p1:Device">
                  <OperationMode xmlns="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp">Active</OperationMode>
                  <OperationLed xmlns="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp">On</OperationLed>
                  <DumpRegisters xmlns="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp">true</DumpRegisters>
                  <VisualIndicators xmlns="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp">On</VisualIndicators>
                  <Heartbeat xmlns="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp">Disabled</Heartbeat>
                  <IgnoreErrors xmlns="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp">false</IgnoreErrors>
                  <PortName xmlns="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp">COM3</PortName>
                </Combinator>
              </Expression>
              <Expression xsi:type="p1:Parse">
                <Register xsi:type="beh:DigitalInputState" xmlns="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp" />
              </Expression>
              <Expression xsi:type="HasFlag">
                <Operand xsi:type="WorkflowProperty" TypeArguments="p1:DigitalInputs">
                  <Value />
                </Operand>
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>RenderPipeline</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>640</gl:Width>
                <gl:Height>480</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Black</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Fullscreen</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>Draw</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Position</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Y</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Rescale">
                <dsp:Min>0</dsp:Min>
                <dsp:Max>640</dsp:Max>
                <dsp:RangeMin>0</dsp:RangeMin>
                <dsp:RangeMax>1</dsp:RangeMax>
                <dsp:RescaleType>Linear</dsp:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Diameter" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Position</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>X</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Rescale">
                <dsp:Min>0</dsp:Min>
                <dsp:Max>640</dsp:Max>
                <dsp:RangeMin>1</dsp:RangeMin>
                <dsp:RangeMax>-1</dsp:RangeMax>
                <dsp:RescaleType>Clamp</dsp:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
              <Diameter>0.552451253</Diameter>
              <LocationX>0.8301742</LocationX>
              <LocationY>-0.5</LocationY>
              <Layer>0</Layer>
              <ColorR>1</ColorR>
              <ColorG>1</ColorG>
              <ColorB>1</ColorB>
              <ColorA>1</ColorA>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="9" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="9" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source3" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Dashboard</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TopCamera</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>ChaseCamera</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>2</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>