<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.SoundCard;assembly=Harp.SoundCard"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:movenet="clr-namespace:Bonsai.TensorFlow.MoveNet;assembly=Bonsai.TensorFlow.MoveNet"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>SoundCardCommands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM8</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>SoundCardEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>RawImage</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="movenet:PredictSinglePoseThunder">
          <movenet:MinimumConfidence>0.2</movenet:MinimumConfidence>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="movenet:GetBodyPart">
          <movenet:Name>left_eye</movenet:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.Y</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RawImage</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Size</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>Normalize</scr:Name>
        <scr:Expression>double(Item1) / double(Item2.Height)</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Double.IsNan(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>0</dsp:Min>
          <dsp:Max>1</dsp:Max>
          <dsp:RangeMin>200</dsp:RangeMin>
          <dsp:RangeMax>8000</dsp:RangeMax>
          <dsp:RescaleType>Clamp</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:Format">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Register xsi:type="p1:PlaySoundOrFrequency" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Slice">
          <rx:Start>0</rx:Start>
          <rx:Step>3</rx:Step>
          <rx:Stop xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>SoundCardCommands</Name>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateAttenuationBothPayload">
          <p1:AttenuationBoth>
            <p1:unsignedShort>200</p1:unsignedShort>
            <p1:unsignedShort>200</p1:unsignedShort>
          </p1:AttenuationBoth>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>SoundCardCommands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Back Space Down Control</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateStopPayload">
          <p1:Stop>1</p1:Stop>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>SoundCardCommands</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="12" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>